PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '', 'gender': '', 'age': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  color = white
  expName = FatFace_exp2
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Routines
  Routine Instruction
    TextComponent InstrText
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to our experiment!

        In our experiment, two faces will presented on the Screen, one is on top and another one is at the bottome.
        Place indicate which face looks fatter by clicking on it as quick as you can.

        Press "Space" to go to the practical session.
    KeyboardComponent InstrKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thank you!
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  Routine Practise
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        PracMouse.setPos(newPos=(0,0))
    PolygonComponent Fixation0
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent Upper_image
      image [set every repeat] = $UImage
      interpolate = nearest
      pos = (0, 0.16)
      startVal [time (s)] = 0.5
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    ImageComponent Lower_image
      image [set every repeat] = $LImage
      interpolate = nearest
      pos = (0, -0.16)
      startVal [time (s)] = 0.5
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    MouseComponent PracMouse
      clickable = Upper_image,Lower_image
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveParamsClickable = name,pos
      startVal [time (s)] = 0.5
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  Routine Break
    TextComponent BreakText
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The practise part is over.

        Press "Space" to go to the next part.
    KeyboardComponent Prac_Key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine AsianD
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        ADcondition = random.choice(('conditionList/AD_list1.xlsx','conditionList/AD_list2.xlsx'))

        thisExp.addData('ADcondition_file', ADcondition)
      Begin Routine:
        ADMouse.setPos(newPos=(0,0))
    PolygonComponent Fixation2
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent AD_image_1
      image [set every repeat] = $Upper_Image
      interpolate = nearest
      pos = (0, 0.16)
      startVal [time (s)] = 0.5
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    ImageComponent AD_imgae_2
      image [set every repeat] = $Lower_Image
      interpolate = nearest
      pos = (0, -0.16)
      startVal [time (s)] = 0.5
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    MouseComponent ADMouse
      clickable = AD_image_1,AD_imgae_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveParamsClickable = name,pos
      startVal [time (s)] = 0.5
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  Routine AsianS
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        AScondition = random.choice(('conditionList/AS_list1.xlsx','conditionList/AS_list2.xlsx'))

        thisExp.addData('AScondition_file', AScondition)
      Begin Routine:
        ASMouse.setPos(newPos=(0,0))
    PolygonComponent Fixation
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent AS_image_1
      image [set every repeat] = $Upper_Image
      interpolate = nearest
      pos = (0, 0.16)
      startVal [time (s)] = 0.5
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    ImageComponent AS_image_2
      image [set every repeat] = $Lower_Image
      interpolate = nearest
      pos = (0, -0.16)
      startVal [time (s)] = 0.5
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    MouseComponent ASMouse
      clickable = AS_image_1,AS_image_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveParamsClickable = name,pos
      startVal [time (s)] = 0.5
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  Routine CaucasianS
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        CScondition = random.choice(('conditionList/CS_list1.xlsx','conditionList/CS_list2.xlsx'))

        thisExp.addData('CScondition_file', CScondition)
      Begin Routine:
        CSMouse.setPos(newPos=(0,0))
    PolygonComponent Fixation3
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent CS_image_1
      image [set every repeat] = $Upper_Image
      interpolate = nearest
      pos = (0, 0.16)
      startVal [time (s)] = 0.5
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    ImageComponent CS_image_2
      image [set every repeat] = $Lower_Image
      interpolate = nearest
      pos = (0, -0.16)
      startVal [time (s)] = 0.5
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    MouseComponent CSMouse
      clickable = CS_image_1,CS_image_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveParamsClickable = name,pos
      startVal [time (s)] = 0.5
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  Routine CaucasianD
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        CDcondition = random.choice(('conditionList/CD_list1.xlsx','conditionList/CD_list2.xlsx'))

        thisExp.addData('CDcondition_file', CDcondition)
      Begin Routine:
        CDMouse.setPos(newPos=(0,0))
    PolygonComponent Fixation4
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent CD_image_1
      image [set every repeat] = $Upper_Image
      interpolate = nearest
      pos = (0, 0.16)
      startVal [time (s)] = 0.5
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    ImageComponent CD_image_2
      image [set every repeat] = $Lower_Image
      interpolate = nearest
      pos = (0, -0.16)
      startVal [time (s)] = 0.5
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    MouseComponent CDMouse
      clickable = CD_image_1,CD_image_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveParamsClickable = name,pos
      startVal [time (s)] = 0.5
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  Routine BlackS
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        BScondition = random.choice(('conditionList/BS_list1.xlsx','conditionList/BS_list2.xlsx'))

        thisExp.addData('BScondition_file', BScondition)
      Begin Routine:
        BSMouse.setPos(newPos=(0,0))
    PolygonComponent Fixation5
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent BS_image_1
      image [set every repeat] = $Upper_Image
      interpolate = nearest
      pos = (0, 0.16)
      startVal [time (s)] = 0.5
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    ImageComponent BS_image_2
      image [set every repeat] = $Lower_Image
      interpolate = nearest
      pos = (0, -0.16)
      startVal [time (s)] = 0.5
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    MouseComponent BSMouse
      clickable = BS_image_1,BS_image_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveParamsClickable = name,pos
      startVal [time (s)] = 0.5
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  Routine BlackD
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        BDcondition = random.choice(('conditionList/BD_list1.xlsx','conditionList/BD_list2.xlsx'))

        thisExp.addData('BDcondition_file', BDcondition)
      Begin Routine:
        BDmouse.setPos(newPos=(0,0))
    PolygonComponent Fixation6
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent BD_image_1
      image [set every repeat] = $Upper_Image
      interpolate = nearest
      pos = (0, 0.16)
      startVal [time (s)] = 0.5
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    ImageComponent BD_image_2
      image [set every repeat] = $Lower_Image
      interpolate = nearest
      pos = (0, -0.16)
      startVal [time (s)] = 0.5
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    MouseComponent BDmouse
      clickable = BD_image_1,BD_image_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveParamsClickable = name,pos
      startVal [time (s)] = 0.5
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  Routine ITI_2
    CodeComponent ITI
      Code Type = Auto->JS
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      Begin Routine:
        import random
        ITI = random.uniform(0.5, 1.5)
        thisExp.addData('ITI', ITI) # record it in the data file
    TextComponent BlankTest
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI
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Flow
  Routine Instruction
  LoopInitiator Prac_Loop loopType="TrialHandler"
    conditionsFile = Prac_Order.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('UImage', 'materials/Practice/002.jpeg'), ('LImage', 'materials/Practice/001.jpeg')]),
      OrderedDict([('UImage', 'materials/Practice/002.jpeg'), ('LImage', 'materials/Practice/001.jpeg')]),
      OrderedDict([('UImage', 'materials/Practice/001.jpeg'), ('LImage', 'materials/Practice/002.jpeg')]),
      OrderedDict([('UImage', 'materials/Practice/001.jpeg'), ('LImage', 'materials/Practice/002.jpeg')])]
    Routine Practise
    Routine ITI_2
  LoopTerminator Prac_Loop
  Routine Break
  LoopInitiator BlockTrail loopType="TrialHandler"
    conditionsFile = BlockOrder.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('AS_rep', 1), ('AD_rep', 0), ('BS_rep', 0), ('BD_rep', 0), ('CS_rep', 0), ('CD_rep', 0)]),
      OrderedDict([('AS_rep', 0), ('AD_rep', 1), ('BS_rep', 0), ('BD_rep', 0), ('CS_rep', 0), ('CD_rep', 0)]),
      OrderedDict([('AS_rep', 0), ('AD_rep', 0), ('BS_rep', 1), ('BD_rep', 0), ('CS_rep', 0), ('CD_rep', 0)]),
      OrderedDict([('AS_rep', 0), ('AD_rep', 0), ('BS_rep', 0), ('BD_rep', 1), ('CS_rep', 0), ('CD_rep', 0)]),
      OrderedDict([('AS_rep', 0), ('AD_rep', 0), ('BS_rep', 0), ('BD_rep', 0), ('CS_rep', 1), ('CD_rep', 0)]),
      OrderedDict([('AS_rep', 0), ('AD_rep', 0), ('BS_rep', 0), ('BD_rep', 0), ('CS_rep', 0), ('CD_rep', 1)])]
    LoopInitiator AS_Loop loopType="TrialHandler"
      conditionsFile = $AScondition
      loopType = random
      nReps = AS_rep
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      Routine AsianS
      Routine ITI_2
    LoopTerminator AS_Loop
    LoopInitiator BS_Loop loopType="TrialHandler"
      conditionsFile = $BScondition
      loopType = random
      nReps = BS_rep
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      Routine BlackS
      Routine ITI_2
    LoopTerminator BS_Loop
    LoopInitiator BD_Loop loopType="TrialHandler"
      conditionsFile = $BDcondition
      loopType = random
      nReps = BD_rep
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      Routine BlackD
      Routine ITI_2
    LoopTerminator BD_Loop
    LoopInitiator AD_Loop loopType="TrialHandler"
      conditionsFile = $ADcondition
      loopType = random
      nReps = AD_rep
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      Routine AsianD
      Routine ITI_2
    LoopTerminator AD_Loop
    LoopInitiator CS_Loop loopType="TrialHandler"
      conditionsFile = $CScondition
      loopType = random
      nReps = CS_rep
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      Routine CaucasianS
      Routine ITI_2
    LoopTerminator CS_Loop
    LoopInitiator CD_Loop loopType="TrialHandler"
      conditionsFile = $CDcondition
      loopType = random
      nReps = CD_rep
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      Routine CaucasianD
      Routine ITI_2
    LoopTerminator CD_Loop
  LoopTerminator BlockTrail
  Routine End
